PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = test1
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Routines
  Routine trial
    KeyboardComponent key_resp
      allowedKeys = 'left','right','down'
      correctAns = right
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    PolygonComponent stdline
      fillColor = white
      pos = (-500, 0)
      shape = line
      size = (100, 2)
      startVal [time (s)] = 0.5
      units = pix
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    PolygonComponent testline
      fillColor = white
      pos = (500, 0)
      shape = line
      size [set every repeat] = (length, 2)
      startVal [time (s)] = 0.5
      units = pix
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    PolygonComponent leftup
      fillColor = white
      ori = -45
      pos [set every repeat] = (500-(length/2)+10/(1.414), 10/(1.414))
      shape = rectangle
      size [set every repeat] = (20, 2)
      startVal [time (s)] = 0.5
      units = pix
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    PolygonComponent leftdown
      fillColor = white
      ori = 45
      pos [set every repeat] = (500-(length/2)+10/(1.414), -10/(1.414))
      shape = rectangle
      size [set every repeat] = (20, 2)
      startVal [time (s)] = 0.5
      units = pix
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    PolygonComponent rightup
      fillColor = white
      ori = 45
      pos [set every repeat] = (500+(length/2)-10/(1.414), 10/(1.414))
      shape = rectangle
      size [set every repeat] = (20, 2)
      startVal [time (s)] = 0.5
      units = pix
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    PolygonComponent rightdown
      fillColor = white
      ori = -45
      pos [set every repeat] = (500+(length/2)-10/(1.414), -10/(1.414))
      shape = rectangle
      size [set every repeat] = (20, 2)
      startVal [time (s)] = 0.5
      units = pix
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (20, 20)
      startVal [time (s)] = 0.5
      units = pix
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = test1.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'length': 80},
      {'length': 85},
      {'length': 90},
      {'length': 95},
      {'length': 100},
      {'length': 105},
      {'length': 110},
      {'length': 115},
      {'length': 120}]
    Routine trial
  LoopTerminator trials
