PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': 'kc', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = project2
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        numlist1 = np.random.permutation(10)
        numlist = numlist1[0:length]

        if present == 1:
            probe = np.random.choice(numlist)
            corrAns = "left"
        else:
            probe = numlist1[-1]
            corrAns = "right"
        #probe = np.random.choice(numlist1)
    TextComponent txtList
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $numlist
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    TextComponent txtProbe
      letterHeight = 0.1
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
      text [set every repeat] = $probe
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 4
      storeCorrect = True
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  Routine feedback
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.corr == 1:
            vol = 0
        else:
            vol = 1
    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      volume [set every repeat] = vol
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = test1.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'length': 1, 'present': 1},
      {'length': 3, 'present': 1},
      {'length': 5, 'present': 1},
      {'length': 7, 'present': 1},
      {'length': 1, 'present': 0},
      {'length': 3, 'present': 0},
      {'length': 5, 'present': 0},
      {'length': 7, 'present': 0}]
    Routine trial
    Routine feedback
  LoopTerminator trials
